PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EEG_Example
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if use_eeg==True:
            eeg_rec.refresh()
            # set the event id based on the stimulus your showing
            eeg_rec.set_event(hash("StartOfStimulus")%1000000007)
      End Routine:
        if use_eeg==True:
            eeg_rec.refresh()
            # set the event id based on the stimulus your showing
            eeg_rec.set_event(hash("EndOfStimulus")%1000000007)
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Here could be your stimulus
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  Routine EEG_Startup
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        use_eeg = False
        eeg_rec = None

        if use_eeg==True:
            from EEGTools.Recorders.LiveAmpRecorder.liveamp_recorder import LiveAmpRecorder as Recorder
            eeg_rec = Recorder()
            eeg_rec.connect()

        if use_eeg==True:
            eeg_rec.start_recording()
  Routine EEG_End
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        if use_eeg:
            eeg_rec.refresh()
            eeg_rec.disconnect()
            # name of the data to Save
            eeg_rec.save("EEG_Collected_data_raw")
Flow
  Routine EEG_Startup
  Routine trial
  Routine EEG_End
